
<ReactionScheme>
  <Specie name="Ca" id="Ca" kdiff="100" kdiffunit="mu2/s" />
  <Specie name="CaOut" id="CaOut" kdiff="10" kdiffunit="mu2/s" />
  <!-- 10.1016/j.tins.2011.03.002 for Glu diffusion-->
  <Specie name="Glu" id="Glu" kdiff="320" kdiffunit="mu2/s" />
  <Specie name="GluOut" id="GluOut" kdiff="320" kdiffunit="mu2/s" />
  <Specie name="GluBuf" id="GluBuf" kdiff="320" kdiffunit="mu2/s" />
  <Specie name="GluGlubuf" id="GluGlubuf" kdiff="320" kdiffunit="mu2/s" />
  <Specie name="Glubuf" id="Glubuf" kdiff="320" kdiffunit="mu2/s" />
  <Specie name="NMDARC" id="NMDARC" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NMDARC1" id="NMDARC1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NMDARC2" id="NMDARC2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NMDARD" id="NMDARD" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NMDARO" id="NMDARO" kdiff="0" kdiffunit="mu2/s"/>
  
  <Specie name="V" id="V" kdiff="0" kdiffunit="mu2/s" />
  <!-- <Specie name="VOut" id="VOut" kdiff="0" kdiffunit="mu2/s" /> -->
  <Specie name="VBuf" id="VBuf" kdiff="0" kdiffunit="mu2/s" />
<!--

	Kinetic model of NMDA receptors
	===============================

	5-state gating model:
	Clements & Westbrook 1991. Neuron 7: 605.
	Lester & Jahr 1992. J Neurosci 12: 635.
	Edmonds & Colquhoun 1992. Proc. R. Soc. Lond. B 250: 279.
	Hessler, Shirke & Malinow. 1993. Nature 366: 569.
	Clements et al. 1992. Science 258: 1498.
  
	C - C1 - C2 - O
	         |
      	         D

	Voltage dependence of Mg2+ block:
	Jahr & Stevens 1990. J Neurosci 10: 1830.
	Jahr & Stevens 1990. J Neurosci 10: 3178.



  Based on voltage-clamp recordings of NMDA receptor-mediated currents in rat
  hippocampal slices (Hessler et al., Nature 366: 569-572, 1993), this model 
  was fit directly to experimental recordings in order to obtain the optimal
  values for the parameters (see Destexhe, Mainen and Sejnowski, 1996).


  This mod file does not include mechanisms for the release and time course
  of transmitter; it is to be used in conjunction with a sepearate mechanism
  to describe the release of transmitter and that provides the concentration
  of transmitter in the synaptic cleft (to be connected to pointer C here).

  See details in:

  Destexhe, A., Mainen, Z.F. and Sejnowski, T.J.  Kinetic models of 
  synaptic transmission.  In: Methods in Neuronal Modeling (2nd edition; 
  edited by Koch, C. and Segev, I.), MIT press, Cambridge, 1998, pp 1-25.

  (electronic copy available at http://cns.iaf.cnrs-gif.fr)


	      Written by Alain Destexhe and Zach Mainen, 1995
Try Clements & Westbrook 1991
-->
  
<!--  <Reaction name = "NMDARC-C1" id="NMDARC-C1"> -->
<!--     <Reactant specieID="NMDARC"/> -->
<!--     <Reactant specieID="Glu"/> -->
<!--     <Product specieID="NMDARO"/> -->
<!-- "/> -->
<!--     <forwardRate>0.072e-5</forwardRate> -->
<!--     <reverseRate>6.6e-2</reverseRate> -->
<!--  </Reaction> -->
<!-- this is from  Destexhe, A., Mainen, Z.F. and Sejnowski, T.J.  Kinetic models of 
  synaptic transmission.  In: Methods in Neuronal Modeling (2nd edition; 
  edited by Koch, C. and Segev, I.), MIT press, Cambridge, 1998, pp 1-25. -->

<Reaction name = "NMDARC-C1" id="NMDARC-C1">
    <Reactant specieID="NMDARC"/>
    <Reactant specieID="Glu"/>
    <Product specieID="NMDARC1"/>
    <forwardRate>5e-6</forwardRate>
    <reverseRate>12.9e-3</reverseRate>
 </Reaction>

  <Reaction name = "NMDARC1-C2" id="NMDARC1-C2">
    <Reactant specieID="NMDARC1"/>
    <Reactant specieID="Glu"/>
    <Product specieID="NMDARC2"/>
    <forwardRate>5e-6</forwardRate>
    <reverseRate>12.9e-3</reverseRate>
 </Reaction>
   

  <Reaction name = "NMDARC2-D" id="NMDARC2-D">
    <Reactant specieID="NMDARC2"/>
    <Product specieID="NMDARD" />
    <forwardRate>8.4e-3</forwardRate>
    <reverseRate>6.8e-3</reverseRate>
  </Reaction>

   <Reaction name = "NMDARC2-0" id="NMDARC2-0">
    <Reactant specieID="NMDARC2"/>
    <Product specieID="NMDARO" />
    <forwardRate>46.5e-3</forwardRate>
    <reverseRate>76.8e-3</reverseRate>
  </Reaction>

  <Reaction name = "NMDAR0flux" id="NMDAR0flux">
    <Reactant specieID="NMDARO"/>
    <Reactant specieID="CaOut"/>
    <Reactant specieID="V"/>
    <Product specieID="NMDARO" />
    <Product specieID="Ca" />
    <Product specieID="V" />
    <forwardRate>2.5e-9</forwardRate>
    <reverseRate>2.5e-9</reverseRate>
  </Reaction>

<!--https://doi.org/10.1523/JNEUROSCI.5125-04.2005 for astrocytes from adult animals ~ 1 ms-1, juvenile 1/5ms 0.2 ms-1 -->
  <Reaction name = "Glu--GluOut" id="Glu--GluOut">
    <Reactant specieID="Glu"/>
    <Product specieID="GluOut"/>
  
    <forwardRate>1e-3</forwardRate>
    <reverseRate>4e-9</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

  <!--  <Reaction name = "V-\-VOut" id="V-\-VOut"> -->
  <!--   <Reactant specieID="V"/> -->
  <!--   <Product specieID="VOut"/> -->
  
  <!--   <forwardRate>0.5e-1</forwardRate> -->
  <!--   <reverseRate>0.02e-6</reverseRate> -->
  <!--   <Q10>0.2</Q10> -->
  <!-- </Reaction> -->
 
  <Reaction name="GluOut+GluBuf--NULL" id="GluOut_buf--NULL">
    <Reactant specieID="Glu" />
    <Reactant specieID="GluBuf" />
    <forwardRate>5e-02</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>

  <Reaction name="GluGlubufGlu+Glubuf" id="GluGlubufGlu+Glubuf">
    <Reactant specieID="GluGlubuf" />
    <Product specieID="Glubuf" />
    <Product specieID="Glu" />
    <forwardRate>20e-03</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>
  <Reaction name="GluOut+GlubufNULL" id="GluOut_GlubufNULL">
    <Reactant specieID="GluOut" />
    <Reactant specieID="Glubuf" />
    <forwardRate>1e-06</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>

  
   <Reaction name="V+VBuf-\-NULL" id="V_buf-\-NULL"> 
     <Reactant specieID="V" /> 
     <Reactant specieID="VBuf" /> 
     <forwardRate>5e-05</forwardRate> 
   <reverseRate>0</reverseRate> 
  </Reaction> 

  <!-- <Reaction name="VOut+VBuf-\-NULL" id="VOut_buf-\-NULL"> -->
  <!--   <Reactant specieID="VOut" /> -->
  <!--   <Reactant specieID="VBuf" /> -->
  <!--   <forwardRate>5e-05</forwardRate> -->
  <!--   <reverseRate>0</reverseRate> -->
  <!-- </Reaction> -->

</ReactionScheme>
