<?xml version="1.0"?>

<!-- PKC phos neurogranin Km=150 nM, kCat = 3.571s-1 https://pubmed.ncbi.nlm.nih.gov/8424932/ -->
<ReactionScheme>
  <Specie name="Ca" id="Ca" kdiff="200" kdiffunit="mu2/s" />
  <Specie name="CaMCa4" id="CaMCa4" kdiff="4" kdiffunit="mu2/s" />
 
  <!-- Add mGluRs from Blackwell's model -->
  <Specie name="Glu"            id="Glu"           kdiff="100"   kdiffunit="mu2/s"/>
  <Specie name="GluOut"         id="GluOut"        kdiff="100"   kdiffunit="mu2/s"/>
  <Specie name="MgluR"          id="MgluR"         kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="GluMgluR"       id="GluMgluR"      kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="GluMgluRdesens" id="GluMgluRdesens" kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="MgluRGq"        id="MgluRGq"       kdiff="0"     kdiffunit="mu2/s"/> 
  <Specie name="Gqabg"          id="Gqabg"         kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="GluMgluRGq"     id="GluMgluRGq"    kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="GqaGTP"         id="GqaGTP"        kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="GqaGDP"         id="GqaGDP"        kdiff="0"     kdiffunit="mu2/s"/>  

  <Specie name="Plc"             id="Plc"             kdiff="0"    kdiffunit = "mu2/s"/>
  <Specie name="PlcCa"           id="PlcCa"           kdiff="0"    kdiffunit = "mu2/s"/>
  <Specie name="PlcCaGqaGTP"     id="PlcCaGqaGTP"     kdiff="0"    kdiffunit = "mu2/s"/>
  <Specie name="PlcGqaGTP"       id="PlcGqaGTP"       kdiff="0"    kdiffunit = "mu2/s"/>
  <Specie name="Pip2"            id="Pip2"            kdiff="10"    kdiffunit = "mu2/s"/>
  <Specie name="Pip2_PM"            id="Pip2_PM"            kdiff="0"    kdiffunit = "mu2/s"/>
  <Specie name="PM"            id="PM"            kdiff="0"    kdiffunit = "mu2/s"/>
  <Specie name="PlcCaPip2_PM"       id="PlcCaPip2_PM"       kdiff="0"    kdiffunit = "mu2/s"/>
  <Specie name="PlcCaGqaGTPPip2_PM" id="PlcCaGqaGTPPip2_PM"  kdiff="0"    kdiffunit = "mu2/s"/>
 
  
  <Specie name="PipKinase"      id="PipKinase"      kdiff="10"    kdiffunit = "mu2/s"/>
  <Specie name="IP3degPipK"      id="IP3degPipK"      kdiff="10"    kdiffunit = "mu2/s"/>
  <Specie name="IP4"     id="IP4"           kdiff="10"    kdiffunit = "mu2/s"/>
  <Specie name="IP2"     id="IP2"           kdiff="10"    kdiffunit = "mu2/s"/>
<!--
IP3 diffusion
DOI: 10.1126/scisignal.aag1625 indicates 3-10 um2/s
DOI: 10.1038/s41598-023-29876-3 indicates  100 um2/s
 -->
  <Specie name="IP3"            id="IP3"           kdiff="20." kdiffunit="mu2/s"/>

  <Specie name="IP3K"            id="IP3K"           kdiff="2." kdiffunit="mu2/s"/>
  <Specie name="IP3K_IP3"            id="IP3K_IP3"           kdiff="2." kdiffunit="mu2/s"/>
  <Specie name="IP5P"            id="IP5P"           kdiff="2." kdiffunit="mu2/s"/>
  <Specie name="IP3K_Ca2"            id="IP3K_Ca2"           kdiff="2." kdiffunit="mu2/s"/>
  <Specie name="IP5P_IP3"            id="IP5P_IP3"           kdiff="2." kdiffunit="mu2/s"/>
  <Specie name="IP5P_IP4"            id="IP5P_IP4"           kdiff="2." kdiffunit="mu2/s"/>
  <Specie name="IP3K_Ca2_IP3"            id="IP3K_Ca2_IP3"           kdiff="2." kdiffunit="mu2/s"/>

<!-- GluR reactions with Glutamate and Gq-proteins -->
<!--III. *********** Gq coupled receptor, from GQ RXN FILE *************-->
   <!--0a. GluOut    Glu <-> GluOut>  -->
  <Reaction name = "Glu--GluOut" id="Glu--GluOut">
  	<Reactant specieID="Glu"/>
	<Product specieID="GluOut"/>

  	<forwardRate>0.5e-3</forwardRate>
  	<reverseRate>0.002e-6</reverseRate>
  	<Q10>0.2</Q10>
  </Reaction>

  
   <!--0b. GluMgluR <==> Desensitized, needed for prolonged DHPG application -->
      <Reaction name = "Glu+MgluR--GluMgluRdesens" id="Glu+MgluR--GluMgluRdesens">
        <Reactant specieID="GluMgluR"              />
        <Product  specieID="GluMgluRdesens"         />

        <forwardRate> 0.0625e-03 </forwardRate>
        <reverseRate> 0.001e-03      </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

   <!--1a. Glu or Glu agonist Dhpg: Glu + MgluR <==> GluMgluR
    1st set of rates is for Dhpg, 2nd set of rates for Glu 
Kd of mGlur5 for glu is ~ 2.2 uM 10.1007/s11064-016-2026-6
 -->
     <Reaction name = "Glu+MgluR--GluMgluR" id="Glu+MgluR--GluMgluR">
        <Reactant specieID="Glu"              />
        <Reactant specieID="MgluR"              />
        <Product  specieID="GluMgluR"         />

        <forwardRate> 2e-7 </forwardRate>
        <reverseRate> 0.5e-03      </reverseRate>
    </Reaction>

    <!--2a. Gqabg + GluMgluR    <-> GluMgluRGq    -->
    <Reaction name = "Gqabg+GluMgluR--GluMgluRGq" id="Gqabg+GluMgluR--GluMgluRGq">
        <Reactant specieID="Gqabg"               />
        <Reactant specieID="GluMgluR"             />
        <Product  specieID="GluMgluRGq"            />

        <forwardRate>  0.0009e-03  </forwardRate>
        <reverseRate>   1.36e-03  </reverseRate>
    </Reaction>

  <!--1b. Gqabg + MgluR <-> MgluRGq -->
  <Reaction name = "Gqabg+MgluR- -MgluRGq" id="Gqabg+MgluR- -MgluRGq">
        <Reactant specieID="Gqabg" />
        <Reactant specieID="MgluR" />
        <Product specieID="MgluRGq" />

        <forwardRate> 4.5e-8 </forwardRate>
        <reverseRate> 0.68e-03 </reverseRate>
   </Reaction>

   <!--2b. Glu + MgluRGq <-> GluMgluRGq -->
   <Reaction name = "Glu+MgluRGq- -GluMgluRGq" id="Glu+MgluRGq- -GluMgluRGq">
        <Reactant specieID="Glu" />
        <Reactant specieID="MgluRGq" />
        <Product specieID="GluMgluRGq" />

        <forwardRate> 0.004e-03 </forwardRate>
        <reverseRate> 1e-03 </reverseRate>
   </Reaction>

   <!--3. GabgGluMglu    <-> GqaGTP + GluMgluRGbg -->
    <Reaction name = "GluMgluRGq--GqaGTP+GluMgluRGbg" id="GluMgluRGq--GqaGTP+GluMgluRGbg">
        <Reactant specieID="GluMgluRGq"               />
        <Product specieID="GqaGTP"             />
        <Product specieID="GluMgluR"            /> 
  
        <forwardRate>  1.5e-03 </forwardRate>
        <reverseRate>   0  </reverseRate>
    </Reaction>

 

  <!-- CA, Plc, Gq reactions are thermodynamically balanced JJS -->
  <Reaction name = "Plc+Ca--PlcCa" id="Plc+Ca--PlcCa">
    <Reactant specieID="Ca"           />
    <Reactant specieID="Plc"              />
    <Product  specieID="PlcCa"               />

    <forwardRate> 0.0005e-03   </forwardRate>
    <reverseRate> 1e-03        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  
  <!-- Plc + GqaGTP    <->   PlcGqaGTP 1200 nM -->
  <!--AB: Falkenburger 2010 uses 0.71e-3 for reverse rate --> 
  <!--Kf is 10x lower for Plc - GqaGTP than Jan31 reac -->
  <Reaction name = "Plc+GqaGTP--PlcGqaGTP" id="Plc+GqaGTP--PlcGqaGTP">
    <Reactant specieID="GqaGTP"           />
    <Reactant specieID="Plc"              />
    <Product  specieID="PlcGqaGTP"               />

    <forwardRate> 0.0007e-03   </forwardRate>
    <reverseRate> 0.7e-03        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <!-- PlcGqaGTP + Ca    <->   PlcCaGqaGTP  500 nM-->
  <Reaction name = "PlcGqaGTP+Ca--PlcCaGqaGTP" id="PlcGqaGTP+Ca--PlcCaGqaGTP">
    <Reactant specieID="Ca"           />
    <Reactant specieID="PlcGqaGTP"              />
    <Product  specieID="PlcCaGqaGTP"               />
    
    <forwardRate> 0.0025e-03   </forwardRate>
    <reverseRate> 1.0e-03        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <!-- PlcCa + GqaGTP    <->   PlcCaGqaGTP  100 nM-->
  <!--decrease these rates Nov 30 (same affinity) by 3x -->
  <!--Kf is 10x lower for Plc - GqaGTP than Jan31 reac -->
  <!--Tuomo: used rates from Kim et al. 2013-->
  <Reaction name = "PlcCa+GqaGTP--PlcCaGqaGTP" id="PlcCa+GqaGTP--PlcCaGqaGTP">
    <Reactant specieID="GqaGTP"           />
    <Reactant specieID="PlcCa"              />
    <Product  specieID="PlcCaGqaGTP"               />
    
    <forwardRate> 0.0035e-03   </forwardRate>
    <reverseRate> 0.7e-03        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

 
  <!-- PlcCa + Pip2    <-> PlcCaPip2    -->
  <!--No affinities for Pip2 are found in literature.  ALso, backward rate is very low compared to kcat
      This will initiall have small effect on Km, but might slow down IP3 production.
      Incraese Kb by 5x to decrease IP3 production-->
  <!-- Decrease Kf by 10x to compensate for 10x inc in Pip2-->
  <!-- decrease the next two set of rates 5x overall since too much Pip2 is being hydrolyzed at basal calcium Nov 30 -->
  <Reaction name = "PlcCa+Pip2_PM--PlcCaPip2_PM" id="PlcCa+Pip2_PM--PlcCaPip2_PM">
    <Reactant specieID="PlcCa"               />
    <Reactant specieID="Pip2_PM"             />
    <Product  specieID="PlcCaPip2_PM"            />
    
    <forwardRate> 0.05e-06   </forwardRate>
    <reverseRate> 1.8e-3   </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  

  <!-- PlcCaPip2_PM      <-> PlcCaDag + IP3 -->  
  <Reaction name = "PlcCaPip2_PM--PlcCaDag+IP3" id="PlcCaPip2_PM--PlcCaDag+IP3">
    <Reactant specieID="PlcCaPip2_PM"            />
    <Product  specieID="PlcCa"               />
    <Product  specieID="IP3"            />
    <Product  specieID="PM"            />
    
    <forwardRate> 0.45e-03     </forwardRate>
    <reverseRate> 0e-03    </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  
  <!-- PlcCaGqaGTP + Pip2_PM    <-> PlcCaGqaGTPPip2_PM    -->
  <!-- Decrease Kf by 10x to compensate for 10x inc in Pip2_PM-->
  <!-- Decrease rates by 2x to maintain 10x enhancement by GqaGTP Nov 30
       Increse Kb by 5x to decrease IP3 production-->
  <Reaction name = "PlcCaGqaGTP+Pip2_PM--PlcCaGqaGTPPip2_PM" id="PlcCaGqaGTP+Pip2_PM--PlcCaGqaGTPPip2_PM">
    <Reactant specieID="PlcCaGqaGTP"               />
    <Reactant specieID="Pip2_PM"             />
    <Product  specieID="PlcCaGqaGTPPip2_PM"            />
    
    <forwardRate>  1.665e-06   </forwardRate>
    <reverseRate>  60e-03   </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  
  <!-- PlcCaGqaGTPPip2_PM       <-> PlcCaGqaGTPDag + IP3 -->
  <Reaction name = "PlcCaGqaGTPPip2_PM--PlcCaGqaGTPDag+IP3" id="PlcCaGqaGTPPip2_PM--PlcCaGqaGTPDag+IP3">
    <Reactant specieID="PlcCaGqaGTPPip2_PM"            />
    <Product  specieID="PlcCaGqaGTP"               />
    <Product  specieID="IP3"            />
    <Product  specieID="PM"            />
    
    <forwardRate> 30e-03     </forwardRate>
    <reverseRate> 0e-03    </reverseRate>
  </Reaction>

  
  
  <!--  IP3    <-> IP2          Degraded IP3-->
  <!--IP3 degradation taken from Mahajan and Nadkarni 2019 -->
  <Reaction name = "IP3--IP5P" id="IP3--IP5P">
    <Reactant specieID="IP3"            />
    <Reactant specieID="IP5P"            />
    <Product  specieID="IP5P_IP3"        />
    
    <forwardRate> 9e-06      </forwardRate>
    <reverseRate> 72e-03      </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name = "IP3--IP5P-degrad" id="IP3--IP5P-degrad">
    <Reactant specieID="IP5P_IP3"            />
    <Product  specieID="IP5P"        />
    <Product specieID="IP2"            />
    <forwardRate> 18e-03      </forwardRate>
    <Q10>         0.2           </Q10>
  </Reaction>

 <Reaction name = "IP4--IP5P" id="IP4--IP5P">
    <Reactant specieID="IP4"            />
    <Reactant specieID="IP5P"            />
    <Product  specieID="IP5P_IP4"        />
    
    <forwardRate> 0.95e-04      </forwardRate>
    <reverseRate> 72e-03      </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name = "IP4--IP5P-degrad" id="IP4--IP5P-degrad">
    <Reactant specieID="IP5P_IP4"            />
    <Product  specieID="IP5P"        />
    <Product specieID="IP3"            />
    <forwardRate> 6e-03      </forwardRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <!-- IP3K type A    https://doi.org/10.1111/j.1460-9568.2006.05125.x -->
  <!-- affinity for CaMCa4 https://doi.org/10.1016/S0014-5793(98)00225-7 -->
  <Reaction name = "IP3K--2Ca" id="IP3K--2Ca">
    <Reactant specieID="IP3K"            />
    <Reactant specieID="CaMCa4"       />
    <Product  specieID="IP3K_Ca2"        />
    
    <forwardRate> 0.002      </forwardRate>
    <reverseRate> 10e-03      </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name = "IP3K2Ca--IP3" id="IP3K2Ca--IP3">
    <Reactant specieID="IP3K_Ca2"            />
    <Reactant specieID="IP3"        />
    <Product  specieID="IP3K_Ca2_IP3"        />

    <forwardRate> 100e-06      </forwardRate>
    <reverseRate> 80e-03      </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

<Reaction name = "IP3K2CaIP3" id="IP3K2CaIP3">
  <Reactant specieID="IP3K_Ca2_IP3"            />
  <Product specieID="IP4"        />
  <Product  specieID="IP3K_Ca2"        />

    <forwardRate> 20e-03      </forwardRate>
    <Q10>         0.2           </Q10>
</Reaction>


<!-- IP3K binds IP3 without CaMCa4 it is just 3 times less effective, so we increased the Km by a factor of 3-->
  <Reaction name = "IP3K--IP3" id="IP3K--IP3">
    <Reactant specieID="IP3K"            />
    <Reactant specieID="IP3"        />
    <Product  specieID="IP3K_IP3"        />

    <forwardRate> 33e-06      </forwardRate>
    <reverseRate> 80e-03      </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

<Reaction name = "IP3KIP3" id="IP3KIP3">
  <Reactant specieID="IP3K_IP3"            />
  <Product specieID="IP4"        />
  <Product  specieID="IP3K"        />

    <forwardRate> 20e-03      </forwardRate>
    <Q10>         0.2           </Q10>
</Reaction>


<!-- this is a completely fake specie and fake reaction to simulate that part of ip3 cycling-->
<Reaction name = "IP3degrad + PipKinase -- IP3degPipKinase" id="PipKinase1">
    <Reactant specieID="IP2"            />   
    <Reactant specieID="PipKinase"               />
    <Product  specieID="IP3degPipK"            />

    <forwardRate> 2.0e-6    </forwardRate>
    <reverseRate> 1e-03    </reverseRate>
    <Q10>         0.2           </Q10>
-</Reaction>

<!-- Initial rate from PI5kinase from Falkenburger, increased to compensate for lower reactant quantity -->
   <Reaction name = "IP3degPipKinase -- PIP2 + PipKinase" id="PipKinase2">
     <Reactant specieID="IP3degPipK"            />
     <Product  specieID="PipKinase"            />
    <Product  specieID="Pip2"            />

    <forwardRate> 3e-3  </forwardRate>
    <reverseRate> 0e-03    </reverseRate>
    <Q10>         0.2           </Q10>
   </Reaction>


<!-- this is a completely fake specie and fake reaction to simulate that part of ip3 cycling-->
<Reaction name = "Pip2-to-PM-binging" id="Pip2-to-PM-binging">
    <Reactant specieID="Pip2"            />   
    <Reactant specieID="PM"               />
    <Product  specieID="Pip2_PM"            />

    <forwardRate> 2.0e-5    </forwardRate>
    <reverseRate> 1e-04    </reverseRate>
    <Q10>         0.2           </Q10>
-</Reaction>
   

<!-- GAP activity - only with Plc bound neither to calcium nor PIP2 -->
<!-- PlcGqaGTP       <-> Plc + Gqabg -->
<!-- When Plc hydrolyzes GqaGTP, the GqaGDP immediately binds to Gqbg to regenerate Gqabg
	 This saves two reactions: not only the rebinding, but also Gqbg dissociating from the mGluR after GqaGTP
	 Given the speed of the rebinding and dissociation in previous models, this is a wise choice
	 However, it prevents depletion of Gqabg! -->
<Reaction name = "PlcGqaGTP--Plc+GqaGDP" id="PlcGqaGTP--Plc+GqaGDP">
    <Reactant specieID="PlcGqaGTP"            />
    <Product  specieID="Plc"               />
    <Product  specieID="GqaGDP"            />

    <forwardRate>   12e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<!-- Gqap activity of PlcCa -->
<Reaction name = "PlcCaGqaGTP--PlcCa+GqaGDP" id="PlcCaGqaGTP--Plc+GqaGDP">
    <Reactant specieID="PlcCaGqaGTP"            />
    <Product  specieID="PlcCa"               />
    <Product  specieID="GqaGDP"            />

    <forwardRate>   12e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>



<!-- Hydrolysis of GqaGTP - slower than GAP activity-->
<Reaction name = "GqaGTP--GqaGDP" id="GqaGTP--GqaGDP">
    <Reactant specieID="GqaGTP"            />
    <Product  specieID="GqaGDP"            />

    <forwardRate>   1e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<!-- 1st order regeneration of Gqabg 
avoids the need to generate Gqbg, and have them react-->
<Reaction name = "GqaGDP--Gqabg" id="GqaGDP--Gqabg">
  <Reactant specieID="GqaGDP"            />
  <Product  specieID="Gqabg"            />

   <forwardRate>   2e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>




    

</ReactionScheme>
